
id1=getImageID();          //identificaci�n de IDs
tamano=0;
figura=newArray(nImages);
for(i=id1-10000; i<id1+10000; i++)
	{
	if(isOpen(i) && tamano<nImages)
		{
		selectImage(i);
		figura[tamano]=getTitle();
		tamano++;
		}		
	}

function VECTORIZAR(imagenAvectorizar, an, al)                     
{
selectWindow(imagenAvectorizar);
vector=newArray(an*al);
  i = 0;
  for (y=0; y<al; y++)
	{
	for (x=0; x<an; x++)
		{
		vector[i] = getPixel(x,y);
		i++; 
		}
	}
return vector;
}


Dialog.create("Vesiculas");                                                       
 
  Dialog.addChoice("Imagen: ", figura);  
  Dialog.addNumber("Numero de objetos: ", 200); 
  Dialog.addNumber("Radio de objetos: ", 200); 
  Dialog.addNumber("Valor de Pixel: ", 20);
  Dialog.addCheckbox("Agrandar Objetos", true); 
  Dialog.addNumber("Radio: ", 3); 

       Dialog.show();
   	img=Dialog.getChoice();
   	n=Dialog.getNumber();
   	radioTemplado=Dialog.getNumber();
    vp=Dialog.getNumber();
    ao=Dialog.getCheckbox();
   	radio=Dialog.getNumber();

selectWindow(img);
run("Duplicate...", "img2");
selectWindow("img2");
run("Mean...", "radius=radioTemplado");

w=getWidth();
h=getHeight();

newImage(Exclusion, "8-bit black", w, h, 1);


function pa(w, h, n) {
v=newArray(n);
vv=newArray(w*h);
for(i=0; i<w*h; i++)
	vv[i]=false;
for(i=0; i<n; i++) {
	p=round(random*(w*h));
		if(vv[p]==false)
			{ v[i]=p; vv[p]=true; } 
			else
			{ i--; }
	}
return v;
}

v=pa(w, h, n);
//v[0]=500;
//v[1]=1336;
//v[2]=2013;

if(movement=="Browniano" || movement=="Superdifusivo") {
for(i=1; i<frames+1; i++)
	{
	setSlice(i);
	for(j=0; j<n; j++)
		{
		x=v[j]%w;
		y=floor(v[j]/w);
		pix=getPixel(x, y);
		setPixel(x, y, pix+vp);
		alfa=random*2*PI;
		if(movement=="Superdifusivo") alfa=random*PI;
		if(pc==false) 
			STEP=random*step;
			else
			STEP=step;
		y1=round(STEP*sin(alfa));
		x1=round(STEP*cos(alfa));	
		if(random>=pm) {
		x=x+x1;
		y=y+y1; }
		if(x>=w) {x=0;}
		if(x<0) {x=w-1;}
		if(y>=h) {y=0;}
		if(y<0) {y=h-1;}
		v[j]=y*w+x;		
		}
	}
}		

if(movement=="Direccionado_aleatorio" || movement=="Direccion_unica" ) {
Ye=newArray(n);
Xe=newArray(n);

if(movement=="Direccionado_aleatorio") {
for(i=0; i<n; i++) 	{
	alfa=random*2*PI;
	if(pc==false) STEP=step*random;
	else STEP=step;
	Ye[i]=round(STEP*sin(alfa));
	Xe[i]=round(STEP*cos(alfa));
		}
	}

if(movement=="Direccion_unica") {
do { 
	ii=round((2*random-1)*step);
	jj=round((2*random-1)*step); 
	} while(ii==0 && jj==0)
for(i=0; i<n; i++) 	{
	Ye[i]=ii; 	Xe[i]=jj;
	} }

for(i=1; i<frames+1; i++)
	{
	setSlice(i);
	for(j=0; j<n; j++)
		{
		x=v[j]%w;
		y=floor(v[j]/w);
		pix=getPixel(x, y);
		setPixel(x, y, pix+vp);
		if(random>=pm) {
		x=x+Xe[j];
		y=y+Ye[j]; }
		if(x>=w) {x=0;}
		if(x<0) {x=w-1;}
		if(y>=h) {y=0;}
		if(y<0) {y=h-1;}
		v[j]=y*w+x;
		}
	}
}		

if(movement=="Confinado") {
V=newArray(n);
for(i=0; i<n; i++)
	V[i]=v[i];
for(i=1; i<frames+1; i++)
	{
	setSlice(i);
	for(j=0; j<n; j++)
		{
		x=v[j]%w;
		y=floor(v[j]/w);
		pix=getPixel(x, y);
		setPixel(x, y, pix+vp);
		if(i%2==0){
			STEP=round(random*step);
			x1=round((2*random-1)*STEP);
			if(random>=pm) {x=x+x1;}
			y1=round((2*random-1)*STEP);
			if(random>=pm) {y=y+y1;}
			if(x>=w) {x=0;}
			if(x<0) {x=w-1;}
			if(y>=h) {y=0;}
			if(y<0) {y=h-1;}
			v[j]=y*w+x;	}
			else
			{v[j]=V[j];}		
		}
	}
}		

if(ao==true) {
run("Mean...", "radius=radio stack");
setThreshold(1, 255);
run("Convert to Mask", "method=Default background=Light"); }