
/*
SETC (Significancia Estadï¿½stica de la Triple Colocalizaciï¿½n)
Julio Buonfigli
Prototipo 20

*/

macro "SSTC" {


//DOBLE O TRIPLE Y CARGA DE IMAGENES

Dialog.create("SETC");    //genero ventana de inicio
  Dialog.addMessage("Significancia Estadística de la Triple Colocalización");                                                                
  Dialog.addChoice("Número de canales:", newArray("Dos", "Tres"));    
  Dialog.show();
   	canals=Dialog.getChoice();

if(isOpen("rojoAndMascara"))
	{
	selectWindow("rojoAndMascara");
	close();
	}
if(isOpen("verdeAndMascara"))
	{
	selectWindow("verdeAndMascara");
	close();
	}
if(isOpen("azulAndMascara"))
	{
	selectWindow("azulAndMascara");
	close();
	}

requires("1.29p");              //muestra un mensaje si la versiï¿½n de imagej usada no es compatible

id1=getImageID();          //identificaciï¿½n de IDs
tamano=0;
figura=newArray(nImages*2);
for(i=id1-800; i<id1+800; i++)
	{
	if(isOpen(i))
		{
		selectImage(i);
		figura[tamano]=getTitle();
		tamano++;
		}		
	}





//TRIPLE Y DOBLES

if(canals=="Tres")
{
  Dialog.create("SETC");    //genero ventana de inicio
                                                                    
  Dialog.addChoice("Rojo:", figura);         
  Dialog.addChoice("Verde:", figura);          
  Dialog.addChoice("Azul:", figura);    
  Dialog.addChoice("Máscara:", figura);  
  
  
       Dialog.show();
   	rojo=Dialog.getChoice();
   	verde=Dialog.getChoice();
   	azul=Dialog.getChoice();
   	mascara=Dialog.getChoice();
   	



//SENTENCIAS USADAS EN VARIOS BLOQUES


selectWindow(mascara);
run("Select None");

selectWindow(rojo);
run("8-bit");
selectWindow(verde);
run("8-bit");
selectWindow(azul);
run("8-bit");

w = getWidth;                                  //cargo tamaï¿½o de imagen
h = getHeight;

imageCalculator("AND create", azul, mascara);                       //opero imagenes con la mï¿½scara
rename("azulAndMascara");
imageCalculator("AND create", verde, mascara);  
rename("verdeAndMascara");
imageCalculator("AND create", rojo, mascara);   
rename("rojoAndMascara");

setBatchMode(true);

function contarUnos(ventana)                     //Declaro una funciï¿½n que cuenta unos
{
selectWindow(ventana);       
   a = newArray(w*h);
   i = 0;
   sumador=0;
for (y=0; y<h; y++)
	{
	for (x=0; x<w; x++)
		a[i++] = getPixel(x,y);
	}
for(i=0; i<w*h; i++)
	{
	if(a[i]==255)
		sumador++;
	}
return sumador;
}

function contarCeros(ventana)                     //Declaro una funciï¿½n que cuenta ceros
{
selectWindow(ventana);       
   a = newArray(w*h);
   i = 0;
   sumador=0;
for (y=0; y<h; y++)
	{
	for (x=0; x<w; x++)
		a[i++] = getPixel(x,y);
	}
for(i=0; i<w*h; i++)
	{
	if(a[i]==0)
		sumador++;
	}
return sumador;
}

unosMascara=contarUnos(mascara);                        //cuento unos y ceros en la mascara
cerosMascara=contarCeros(mascara);

if(unosMascara+cerosMascara!=w*h)
	exit("Binarizar la máscara antes de ejecutar la aplicación");

function sumarPixInt(ventana)                     //Declaro una funciï¿½n que suma intensidades de todos los pixeles
{
selectWindow(ventana);       
   a = newArray(w*h);
   i = 0;
   suma=0;
for (y=0; y<h; y++)
	{
	for (x=0; x<w; x++)
		a[i++] = getPixel(x,y);
	}
for(i=0; i<w*h; i++)
	{
	suma=suma+a[i];
	}
return suma;
}






// CALCULO DE COEFICIENTE DE PEARSON Y MANDERS



showStatus("Calculando coeficiente de Pearson y Manders...");

sumRojo=sumarPixInt("rojoAndMascara");                     //sumo intensidades en cada imagen
sumVerde=sumarPixInt("verdeAndMascara");
sumAzul=sumarPixInt("azulAndMascara");

pr=sumRojo/unosMascara;                                    //calculo promedios de intensidad para cada imagen 
pv=sumVerde/unosMascara;
pa=sumAzul/unosMascara;

   numVA=0;                        //inicializo variables de coeficiente de pearson
   numRA=0; 
   nunRV=0;
   denR=0;
   denV=0;
   denA=0;

numMRt=0;                     //inicializo variables de coeficiente de Manders
numMVt=0;
numMAt=0;
numMRv=0;
numMVr=0;
numMRa=0;
numMAr=0;
numMVa=0;
numMAv=0; 
 
selectWindow("rojoAndMascara");	
  r = newArray(w*h);
  i = 0;
for (y=0; y<h; y++)
	{
	for (x=0; x<w; x++)
		{
		r[i] = getPixel(x,y);
		if(r[i] == 255)
			r[i]=254;
		i++;
		}
	}
sumRojoR=0;
i=0;
for (i=0; i<w*h; i++)
	sumRojoR=sumRojoR+r[i];
	

selectWindow("verdeAndMascara");	
  v = newArray(w*h);
  i = 0;
for (y=0; y<h; y++)
	{
	for (x=0; x<w; x++)
		{
		v[i] = getPixel(x,y);
		if(v[i] == 255)
			v[i]=254;
		i++;
		}
	}
sumVerdeR=0;
i=0;
for (i=0; i<w*h; i++)
	sumVerdeR=sumVerdeR+v[i];

selectWindow("azulAndMascara");	   
  az = newArray(w*h);
  i = 0;
for (y=0; y<h; y++)
	{
	for (x=0; x<w; x++)
		{
		az[i] = getPixel(x,y);
		if(az[i] == 255)
			az[i]=254;
		i++;
		}
	}
sumAzulR=0;
i=0;
for (i=0; i<w*h; i++)
	sumAzulR=sumAzulR+az[i];

for(i=0; i<w*h; i++)                                     //calculo todas las series                
	{
	showStatus("Calculando coeficiente de Pearson y Manders...");
	denR=denR+(r[i]-pr)*(r[i]-pr);                                                                 //Pearson                                          
	denV=denV+(v[i]-pv)*(v[i]-pv);
	denA=denA+(az[i]-pa)*(az[i]-pa);
	numVA=numVA+(v[i]-pv)*(az[i]-pa);
	numRA=numRA+(r[i]-pr)*(az[i]-pa);
	numRV=numRV+(r[i]-pr)*(v[i]-pv);
	if(r[i]*v[i]*az[i] != 0)                                                                              //Manders
		{
		numMRt=numMRt+r[i];
		numMVt=numMVt+v[i];
		numMAt=numMAt+az[i];
		}
	if(r[i]*v[i] != 0)
		{
		numMRv=numMRv+r[i];
		numMVr=numMVr+v[i];
		}	
	if(r[i]*az[i] != 0)
		{
		numMRa=numMRa+r[i];
		numMAr=numMAr+az[i];
		}	
	if(az[i]*v[i] != 0)
		{
		numMAv=numMAv+az[i];
		numMVa=numMVa+v[i];
		}	
	}

denRV=sqrt(denR*denV);                             //calculo coeficientes de Pearson
denRA=sqrt(denR*denA);
denVA=sqrt(denA*denV);

PrRV=numRV/denRV;                                     
PrRA=numRA/denRA;
PrVA=numVA/denVA;


MRt=numMRt/sumRojo;                                   //calculo coeficientes de Manders
MVt=numMVt/sumVerde;
MAt=numMAt/sumAzul;
MRv=numMRv/sumRojo;
MVr=numMVr/sumVerde;
MRa=numMRa/sumRojo;
MAr=numMAr/sumAzul;
MVa=numMVa/sumVerde;
MAv=numMAv/sumAzul;

showStatus("");


 









//  SIGNIFICANCIA ESTADï¿½STICA DE MANDERS



showStatus("Calculando significancia estadística para coeficiente de Manders...");


rMRt=newArray(20);                           //Defino arreglos para cada indice de colocalizaciï¿½n
rMVt=newArray(20);
rMAt=newArray(20);
rMRv=newArray(20);
rMVr=newArray(20);
rMRa=newArray(20);
rMAr=newArray(20);
rMVa=newArray(20);
rMAv=newArray(20);

rnumMRt=newArray(20);                      //inicializo variables de coeficiente de Manders
rnumMVt=newArray(20);  
rnumMAt=newArray(20);  
rnumMRv=newArray(20);  
rnumMVr=newArray(20);  
rnumMRa=newArray(20);  
rnumMAr=newArray(20);  
rnumMVa=newArray(20);  
rnumMAv=newArray(20);  

pMRt=0;		                                       //Inicializo contadores positivos
pMVt=0;	
pMAt=0;
pMRv=0;
pMVr=0;
pMRa=0;
pMAr=0;
pMVa=0;
pMAv=0;

nMRt=0;		                                       //Inicializo contadores negativos
nMVt=0;	
nMAt=0;
nMRv=0;
nMVr=0;
nMRa=0;
nMAr=0;
nMVa=0;
nMAv=0;


Mrvvr=MRv+MVr;                                            //variables ï¿½tiles en condicionales de triple colocalizaciï¿½n            
Marra=MRa+MAr;
Mvaav=MVa+MAv;

function cantPixInt(ventana)                     //Declaro una funciï¿½n que cuenta pixeles distintos de cero
{
selectWindow(ventana);       
   a = newArray(w*h);
   i = 0;
   suma=0;
for (y=0; y<h; y++)
	{
	for (x=0; x<w; x++)
		a[i++] = getPixel(x,y);
		
	}
for(i=0; i<w*h; i++)
	{
	if(a[i] != 0)
		suma++;
	}
return suma;
}

valoresR=cantPixInt("rojoAndMascara");            //cantidad de pixeles mayores que cero
valoresV=cantPixInt("verdeAndMascara");  
valoresA=cantPixInt("azulAndMascara"); 


selectWindow("rojoAndMascara");
rb=newArray(w*h);                               //genero un vector que contiene solo los valores distintos de cero para cada canal
s=0;
for(i=0; i<w*h; i++)
	{
	if(r[i] != 0)
		{
		rb[s]=r[i];
		s++;
		}
	}

selectWindow("verdeAndMascara");
vb=newArray(w*h);                               
s=0;
for(i=0; i<w*h; i++)
	{
	if(v[i] != 0)
		{
		vb[s]=v[i];
		s++;
		}
	}

selectWindow("azulAndMascara");
ab=newArray(w*h);                              
s=0;
for(i=0; i<w*h; i++)
	{
	if(az[i] != 0)
		{
		ab[s]=az[i];
		s++;
		}
	}


for(s=0; s<20; s++)                                        //rulo para generar tantas imï¿½genes aleatorias para cada fluorï¿½foro como se cargue en el diï¿½logo de entrada
{
 
//beep();                                                                                    //genero imagenes aleatorias

random("seed", round(random*w*h*10));
	
u=newArray(w*h+10);                                                                //desordeno aleatoriamente el vector rojo
i=0;
for(i=0; i<w*h; i++)
	u[i]=true;

rd=newArray(w*h);
i=0;	
while(i<valoresR)
	{
	e=round(random*valoresR);
        	if(u[e]==true)
		{
		rd[i]=rb[e];
		u[e]=false;
		i++;
		}
	}
	
factor=valoresR/unosMascara;                                                                            //pongo los valores en la mascara

selectWindow(mascara);
run("Duplicate...", "title=RandRojo");
suma=0;
i=0;
while(suma<sumRojoR-255)
	{
	for (y=0; y<h; y++)
		{
		for (x=0; x<w; x++)
			{
			p=random;
			l=getPixel(x, y);
			if(l==255 && p <= factor)
				{
				setPixel(x, y, rd[i]);
				suma=suma+rd[i];
				i++;
				}
			}
		}
	}

for (y=0; y<h; y++)                                      //cambio unos por ceros
	{
	for (x=0; x<w; x++)
		{
		l=getPixel(x, y);
		if(l == 255)
			setPixel(x, y, 0);
		}
	}
	
                                                                //desordeno aleatoriamente el vector verde
i=0;
for(i=0; i<w*h; i++)
	u[i]=true;

vd=newArray(w*h);
i=0;	
while(i<valoresV)
	{
	e=round(random*valoresV);
        	if(u[e]==true)
		{
		vd[i]=vb[e];
		u[e]=false;
		i++;
		}
	}
	
factor=valoresV/unosMascara;                                                                            //pongo los valores en la mascara

selectWindow(mascara);
run("Duplicate...", "title=RandVerde");
suma=0;
i=0;
while(suma<sumVerdeR-255)
	{
	for (y=0; y<h; y++)
		{
		for (x=0; x<w; x++)
			{
			p=random;
			l=getPixel(x, y);
			if(l==255 && p <= factor)
				{
				setPixel(x, y, vd[i]);
				suma=suma+vd[i];
				i++;
				}
			}
		}
	}

for (y=0; y<h; y++)                                      //cambio unos por ceros
	{
	for (x=0; x<w; x++)
		{
		l=getPixel(x, y);
		if(l == 255)
			setPixel(x, y, 0);
		}
	}


                                     
i=0;                                       //desordeno aleatoriamente el vector azul
for(i=0; i<w*h; i++)
	u[i]=true;

ad=newArray(w*h);
i=0;	
while(i<valoresA)
	{
	e=round(random*valoresA);
        	if(u[e]==true)
		{
		ad[i]=ab[e];
		u[e]=false;
		i++;
		}
	}
	
factor=valoresA/unosMascara;                                                                            //pongo los valores en la mascara

selectWindow(mascara);
run("Duplicate...", "title=RandAzul");
suma=0;
i=0;
while(suma<sumAzulR-255)
	{
	for (y=0; y<h; y++)
		{
		for (x=0; x<w; x++)
			{
			p=random;
			l=getPixel(x, y);
			if(l==255 && p <= factor)
				{
				setPixel(x, y, ad[i]);
				suma=suma+ad[i];
				i++;
				}
			}
		}
	}

for (y=0; y<h; y++)                                      //cambio unos por ceros
	{
	for (x=0; x<w; x++)
		{
		l=getPixel(x, y);
		if(l == 255)
			setPixel(x, y, 0);
		}
	}

	
selectWindow("RandRojo");        //obtengo el valor de cada pixel para cada imagen y los transformo en vectores unidimensionales	
   rR = newArray(w*h);    
   i = 0;
for (y=0; y<h; y++)
	{
	for (x=0; x<w; x++)
		rR[i++] = getPixel(x,y);
	}

selectWindow("RandVerde");	
  vR = newArray(w*h);
  i = 0;
for (y=0; y<h; y++)
	{
	for (x=0; x<w; x++)
		vR[i++] = getPixel(x,y);
	}

selectWindow("RandAzul");	   
  aR = newArray(w*h);
  i = 0;
for (y=0; y<h; y++)
	{
	for (x=0; x<w; x++)
		aR[i++] = getPixel(x,y);
	}

	for(i=0; i<w*h; i++)                                     //calculo doble colocalizacion de imagenes generadas                
	{
	if(rR[i]*vR[i] != 0)
		{
		rnumMRv[s]=rnumMRv[s]+rR[i];
		rnumMVr[s]=rnumMVr[s]+vR[i];
		}	
	if(rR[i]*aR[i] != 0)
		{
		rnumMRa[s]=rnumMRa[s]+rR[i];
		rnumMAr[s]=rnumMAr[s]+aR[i];
		}	
	if(aR[i]*vR[i] != 0)
		{
		rnumMAv[s]=rnumMAv[s]+aR[i];
		rnumMVa[s]=rnumMVa[s]+vR[i];
		}	
	}

if(Mrvvr==Mvaav && Mrvvr==Marra)
{
for(i=0; i<w*h; i++) 
	{
	if(r[i]*v[i]*aR[i] != 0)                                                                              
		{
		rnumMRt[s]=rnumMRt[s]+r[i];
		rnumMVt[s]=rnumMVt[s]+v[i];
		rnumMAt[s]=rnumMAt[s]+aR[i];
		}
	}
}
    else
	{
	if(Mrvvr>=Mvaav && Mrvvr>=Marra)                                //busco el canal que menos colocaliza y calculo triple colo
		{													
		for(i=0; i<w*h; i++) 
			{
			if(r[i]*v[i]*aR[i] != 0)                                                                              
				{
				rnumMRt[s]=rnumMRt[s]+r[i];
				rnumMVt[s]=rnumMVt[s]+v[i];
				rnumMAt[s]=rnumMAt[s]+aR[i];
				}
			}
		}
	if(Mvaav>=Mrvvr && Mvaav>=Marra)
		{
		for(i=0; i<w*h; i++) 
			{													
			if(rR[i]*v[i]*az[i] != 0)                                                                              
				{
				rnumMRt[s]=rnumMRt[s]+rR[i];
				rnumMVt[s]=rnumMVt[s]+v[i];
				rnumMAt[s]=rnumMAt[s]+az[i];
				}
			}
		}
	if(Marra>=Mvaav &&  Marra>=Mrvvr)
		{
		for(i=0; i<w*h; i++) 
			{											
			if(r[i]*vR[i]*az[i] != 0)                                                                            
				{
				rnumMRt[s]=rnumMRt[s]+r[i];
				rnumMVt[s]=rnumMVt[s]+vR[i];
				rnumMAt[s]=rnumMAt[s]+az[i];
				}
			}
		}
	}
	
rMRt[s]=rnumMRt[s]/sumRojo;                                   //calculo coeficientes de Manders
rMVt[s]=rnumMVt[s]/sumVerde;
rMAt[s]=rnumMAt[s]/sumAzul;
rMRv[s]=rnumMRv[s]/sumRojo;
rMVr[s]=rnumMVr[s]/sumVerde;
rMRa[s]=rnumMRa[s]/sumRojo;
rMAr[s]=rnumMAr[s]/sumAzulR;
rMVa[s]=rnumMVa[s]/sumVerde;
rMAv[s]=rnumMAv[s]/sumAzul;	



	if(rMRt[s]<=MRt)                           //Para cada coeficiente de colocalizaciï¿½n cuento cuantas veces fue mayor el generado al azar
		pMRt++;
		else
		nMRt++;	
	if(rMVt[s]<=MVt)
		pMVt++;
		else
		nMVt++;
	if(rMAt[s]<=MAt)
		pMAt++;
		else
		nMAt++;
	if(rMRa[s]<=MRa)
		pMRa++;
		else
		nMRa++;	
	if(rMAr[s]<=MAr)
		pMAr++;
		else
		nMAr++;
	if(rMAv[s]<=MAv)
		pMAv++;
		else
		nMAv++;
	if(rMVa[s]<=MVa)
		pMVa++;
		else
		nMVa++;	
	if(rMRv[s]<=MRv)
		pMRv++;
		else
		nMRv++;	
	if(rMVr[s]<=MVr)
		pMVr++;
		else
		nMVr++;
	
	

selectWindow("RandRojo");                           //cierro imï¿½genes para que no interfieran en el prï¿½ximo ciclo del lazo	
close();
selectWindow("RandVerde");
close();
selectWindow("RandAzul");
close();

	
}


sumMRt=0;                          //inicializo variables de suma para promedios
sumMVt=0;
sumMAt=0;
sumMRv=0;
sumMVr=0;
sumMRa=0;
sumMAr=0;
sumMVa=0;
sumMAv=0;


for(i=0; i<20; i++)         //sumo
	{	
	sumMRt=sumMRt+rMRt[i];
	sumMVt=sumMVt+rMVt[i];
	sumMAt=sumMAt+rMAt[i];
	sumMRv=sumMRv+rMRv[i];
	sumMVr=sumMVr+rMVr[i];
	sumMRa=sumMRa+rMRa[i];
	sumMAr=sumMAr+rMAr[i];
	sumMVa=sumMVa+rMVa[i];
	sumMAv=sumMAv+rMAv[i];
	}
	
promMRt=sumMRt/20;                                    //promedio
promMVt=sumMVt/20; 
promMAt=sumMAt/20; 
promMRv=sumMRv/20; 
promMVr=sumMVr/20; 
promMRa=sumMRa/20;
promMAr=sumMAr/20; 
promMVa=sumMVa/20; 
promMAv=sumMAv/20; 

ratioMrt=pMRt/20;                            //Valores de la tabla de resultados, colo significativa (SC)....
ratioMvt=pMVt/20;
ratioMat=pMAt/20;                            
ratioMrv=pMRv/20; 
ratioMvr=pMVr/20; 
ratioMra=pMRa/20;                             
ratioMar=pMAr/20; 
ratioMva=pMVa/20; 
ratioMav=pMAv/20;                             


if(pMRt==0)
	SSMrt="SE";
	else
	if(pMRt==20)
		SSMrt="SC";
		else
		SSMrt="NS";

if(pMVt==0)
	SSMvt="SE";
	else
	if(pMVt==20)
		SSMvt="SC";
		else
		SSMvt="NS";

if(pMAt==0)
	SSMat="SE";
	else
	if(pMAt==20)
		SSMat="SC";
		else
		SSMat="NS";

if(pMVr==0)
	SSMvr="SE";
	else
	if(pMVr==20)
		SSMvr="SC";
		else
		SSMvr="NS";

if(pMRv==0)
	SSMrv="SE";
	else
	if(pMRv==20)
		SSMrv="SC";
		else
		SSMrv="NS";

if(pMRa==0)
	SSMra="SE";
	else
	if(pMRa==20)
		SSMra="SC";
		else
		SSMra="NS";

if(pMAr==0)
	SSMar="SE";
	else
	if(pMAr==20)
		SSMar="SC";
		else
		SSMar="NS";

if(pMVa==0)
	SSMva="SE";
	else
	if(pMVa==20)
		SSMva="SC";
		else
		SSMva="NS";

if(pMAv==0)
	SSMav="SE";
	else
	if(pMAv==20)
		SSMav="SC";
		else
		SSMav="NS";

/*
if(promMRt>0.99)
	promMRt=round(promMRt);
if(promMVt>0.99)
	promMVt=round(promMVt);
if(promMRt>0.99)
	promMAt=round(promMAt);
if(promMRv>0.99)
	promMRv=round(promMRv);
if(promMVr>0.99)
	promMVr=round(promMVr);
if(promMRa>0.99)
	promMRa=round(promMRa);
if(promMAr>0.99)
	promMAr=round(promMAr);
if(promMVa>0.99)
	promMVa=round(promMVa);
if(promMAv>0.99)
	promMAv=round(promMAv);

*/


showStatus("");


selectWindow("rojoAndMascara");
run("Make Binary");                                                                    
selectWindow("verdeAndMascara");                                                             
run("Make Binary");
selectWindow("azulAndMascara");                                           
run("Make Binary");













// COLOCALIZACIï¿½N DE INTERSECCIï¿½N    

imageCalculator("OR create", "rojoAndMascara", "verdeAndMascara");    //Calculo la superficie cubierta total dentro de la mï¿½scara
rename("rojoOrVerde");
imageCalculator("OR create", "rojoOrVerde", "azulAndMascara");                 
rename("OR");
/*
if(intOR==true)
{   
selectWindow("OR");                            
run("Duplicate...", "title=GOR"); 
run("Mean...", "radius=1");
//run("Gaussian Blur...", "sigma=1");
run("Threshold...");
setThreshold(1, 255);
run("Convert to Mask");
unosGOR=contarUnos("GOR");
selectWindow("Threshold");
run("Close");
}

*/
//setBatchMode(true);





showStatus("Calculando porcentage de colocalización de intersección...");

cerosRojos=contarCeros("rojoAndMascara");                     //cuento ceros en cada canal
cerosVerdes=contarCeros("verdeAndMascara");
cerosAzules=contarCeros("azulAndMascara");

cerosRandRojos=cerosRojos-cerosMascara;                       // calculo la cantidad de ceros dentro de la mï¿½scara para cada color
cerosRandVerdes=cerosVerdes-cerosMascara;
cerosRandAzules=cerosAzules-cerosMascara;

imageCalculator("AND create", "rojoAndMascara", "verdeAndMascara");     //opero para obtener doble colocalizaciï¿½n
rename("rojoAndVerde");
imageCalculator("AND create", "azulAndMascara", "rojoAndMascara");  
rename("rojoAndAzul");
imageCalculator("AND create", "verdeAndMascara", "azulAndMascara");  
rename("verdeAndAzul");

imageCalculator("AND create", "rojoAndVerde", "azulAndMascara");     //obtengo triple colocalizaciï¿½n
rename("TripleColocalizacion");

unosRvam=contarUnos("TripleColocalizacion");             // cuento pixeles de triple colo

unosRojos=contarUnos("rojoAndMascara");                     //cuento unos en cada canal
unosVerdes=contarUnos("verdeAndMascara");
unosAzules=contarUnos("azulAndMascara");

unosRV=contarUnos("rojoAndVerde");                       //cuento unos de doble colo
unosRA=contarUnos("rojoAndAzul");
unosVA=contarUnos("verdeAndAzul");

unosRvamOr=contarUnos("OR");                           //cuento unos en el triple OR

rv=(unosRV/unosRojos)*100;                            //calculo coeficientes de colocalizaciï¿½n
vr=(unosRV/unosVerdes)*100;
ra=(unosRA/unosRojos)*100;
ar=(unosRA/unosAzules)*100;
va=(unosVA/unosVerdes)*100;
av=(unosVA/unosAzules)*100;
rvasc=(unosRvam/unosRvamOr)*100;
rvaenr=(unosRvam/unosRojos)*100;
rvaenv=(unosRvam/unosVerdes)*100;
rvaena=(unosRvam/unosAzules)*100;

selectWindow("TripleColocalizacion");         //cierro imï¿½genes para que no interfieran con futuras corridas
close();




selectWindow("rojoOrVerde");
close();
selectWindow("OR");
close();







//  SIGNIFICANCIA ESTADï¿½STICA INTERSECCIï¿½N


showStatus("Calculando significancia estadística de colocalización de intersección...");

rrv=newArray(20);                           //Defino arreglos para cada indice de colocalizaciï¿½n
rvr=newArray(20);
rra=newArray(20);
rar=newArray(20);
rva=newArray(20);
rav=newArray(20);
rrvasc=newArray(20);
rrvaenr=newArray(20);
rrvaenv=newArray(20);
rrvaena=newArray(20);

pcrrv=0;		                                       //Inicializo contadores positivos
pcrvr=0;	
pcrra=0;
pcrar=0;
pcrva=0;
pcrav=0;
pcrrvasc=0;
pcrrvaenr=0;
pcrrvaenv=0;
pcrrvaena=0;

ncrrv=0;		                                       //Inicializo contadores negativos
ncrvr=0;
ncrra=0;
ncrar=0;
ncrva=0;
ncrav=0;
ncrrvasc=0;
ncrrvaenr=0;
ncrrvaenv=0;
ncrrvaena=0;

rvvr=rv+vr;                                            //variables ï¿½tiles en condicionales de triple colocalizaciï¿½n            
arra=ra+ar;
vaav=va+av;



for(s=0; s<20; s++)                        //rulo para generar tantas imï¿½genes aleatorias para cada fluorï¿½foro como se cargue en el diï¿½logo de entrada
	{
	//beep();

	random("seed", round(random*w*h*10));
if(intOR==true)
{
	selectWindow("GOR");                            //genero una imagen aleatoria para el canal rojo
	run("Duplicate...", "title=RandRojo");
	z=0;
            f=0;
   	for (y=0; y<h; y++)
		{
      		for (x=0; x<w; x++)
			{
          			f=random;
			if(f<=(unosGOR-unosRojos)/unosGOR)
			setPixel(x, y, 0);
			}
		}
		
	
	selectWindow("GOR");                            //genero una imagen aleatoria para el canal verde
	run("Duplicate...", "title=RandVerde");
	z=0;
   	f=0;
   	for (y=0; y<h; y++)
		{
      		for (x=0; x<w; x++)
			{
          			f=random;
			if(f<=(unosGOR-unosVerdes)/unosGOR)
				setPixel(x, y, 0);
			
			}
		}
	

	selectWindow("GOR");                            //genero una imagen aleatoria para el canal azul
	run("Duplicate...", "title=RandAzul");
	z=0;
   	f=0;
   	for (y=0; y<h; y++)
		{
      		for (x=0; x<w; x++)
			{
          			f=random;
			if(f<=(unosGOR-unosAzules)/unosGOR)
				setPixel(x, y, 0);
			}
		}
}
else
{
selectWindow(mascara);                            //genero una imagen aleatoria para el canal rojo
	run("Duplicate...", "title=RandRojo");
	z=0;
            f=0;
   	for (y=0; y<h; y++)
		{
      		for (x=0; x<w; x++)
			{
          			f=random;
			if(f<=cerosRandRojos/unosMascara)
			setPixel(x, y, 0);
			}
		}
		
	
	selectWindow(mascara);                            //genero una imagen aleatoria para el canal verde
	run("Duplicate...", "title=RandVerde");
	z=0;
   	f=0;
   	for (y=0; y<h; y++)
		{
      		for (x=0; x<w; x++)
			{
          			f=random;
			if(f<=cerosRandVerdes/unosMascara)
				setPixel(x, y, 0);
			
			}
		}
	

	selectWindow(mascara);                            //genero una imagen aleatoria para el canal azul
	run("Duplicate...", "title=RandAzul");
	z=0;
   	f=0;
   	for (y=0; y<h; y++)
		{
      		for (x=0; x<w; x++)
			{
          			f=random;
			if(f<=cerosRandAzules/unosMascara)
				setPixel(x, y, 0);
			}
		}
}	
	
	imageCalculator("AND create", "RandRojo", "RandVerde");     //opero para obtener doble colocalizaciï¿½n
	rename("RandRojoAndRandVerde");
	imageCalculator("AND create", "RandRojo", "RandAzul");  
	rename("RandRojoAndRandAzul");
	imageCalculator("AND create", "RandVerde", "RandAzul");  
	rename("RandVerdeAndRandAzul");

	if(rvvr==vaav && rvvr==arra)
		{													
		imageCalculator("AND create", "RandAzul", "rojoAndVerde");     // chequeo cual es color que menos colocaliza con el resto y obtengo triple colocalizaciï¿½n
		rename("RandTripleColocalizacion");
		}
		else
		{
		if(rvvr>=vaav && rvvr>=arra)
			{													
			imageCalculator("AND create", "RandAzul", "rojoAndVerde");     
			rename("RandTripleColocalizacion");
			}
		if(vaav>=rvvr && vaav>=arra)
			{													
			imageCalculator("AND create", "RandRojo", "verdeAndAzul");   
			rename("RandTripleColocalizacion");
			}
		if(arra>=vaav &&  arra>=rvvr)
			{													
			imageCalculator("AND create", "RandVerde", "rojoAndAzul");  
			rename("RandTripleColocalizacion");
			}
		}

if(isOpen("RandTripleColocalizacion"))	
	{}
	else
	exit("Error de binarización");
 
	RandunosRvam=contarUnos("RandTripleColocalizacion");         //Cuento la cantidad de pixeles de triple colo
	
	RandunosRV=contarUnos("RandRojoAndRandVerde");    //cueno pixeles de doble colo 
	RandunosRA=contarUnos("RandRojoAndRandAzul"); 
	RandunosVA=contarUnos("RandVerdeAndRandAzul"); 

	
// la superficie cubierta total aleatoria es la misma que la del ensayo
// igual que el total de unos para cada color son los del ensayo


	rrv[s]=(RandunosRV/unosRojos)*100;                            //calculo coeficientes de colocalizaciï¿½n
	rvr[s]=(RandunosRV/unosVerdes)*100;
	rra[s]=(RandunosRA/unosRojos)*100;
	rar[s]=(RandunosRA/unosAzules)*100;
	rva[s]=(RandunosVA/unosVerdes)*100;
	rav[s]=(RandunosVA/unosAzules)*100;	
	rrvasc[s]=(RandunosRvam/unosRvamOr)*100;
	rrvaenr[s]=(RandunosRvam/unosRojos)*100;
	rrvaenv[s]=(RandunosRvam/unosVerdes)*100;
	rrvaena[s]=(RandunosRvam/unosAzules)*100;


	if(rrv[s]<=rv)                           //Para cada coeficiente de colocalizaciï¿½n cuento cuantas veces fue mayor el generado al azar
		pcrrv++;
		else
		ncrrv++;	
	if(rvr[s]<=vr)
		pcrvr++;
		else
		ncrvr++;
	if(rra[s]<=ra)
		pcrra++;
		else
		ncrra++;
	if(rar[s]<=ar)
		pcrar++;
		else
		ncrar++;	
	if(rva[s]<=va)
		pcrva++;
		else
		ncrva++;
	if(rav[s]<=av)
		pcrav++;
		else
		ncrav++;
	if(rrvasc[s]<=rvasc)
		pcrrvasc++;
		else
		ncrrvasc++;	
	if(rrvaenr[s]<=rvaenr)
		pcrrvaenr++;
		else
		ncrrvaenr++;	
	if(rrvaenv[s]<=rvaenv)
		pcrrvaenv++;
		else
		ncrrvaenv++;
	if(rrvaena[s]<=rvaena)
		pcrrvaena++;
		else
		ncrrvaena++;	
	

selectWindow("RandRojo");                           //cierro imï¿½genes para que no interfieran en el prï¿½ximo ciclo del lazo	
close();
selectWindow("RandVerde");
close();
selectWindow("RandAzul");
close();
selectWindow("RandRojoAndRandVerde");
close();	
selectWindow("RandRojoAndRandAzul");
close();
selectWindow("RandVerdeAndRandAzul");
close();
selectWindow("RandTripleColocalizacion");
close();
	
}


sumRrv=0;                          //inicializo variables de suma para promedios
sumRvr=0;
sumRra=0;
sumRvr=0;
sumRar=0;
sumRva=0;
sumRav=0;
sumRrvasc=0;
sumRrvaenr=0;
sumRrvaenv=0;
sumRrvaena=0;


for(i=0; i<20; i++)         //sumo
	{	
	sumRrv=sumRrv+rrv[i];
	sumRvr=sumRvr+rvr[i];
	sumRra=sumRra+rra[i];
	sumRar=sumRar+rar[i];
	sumRva=sumRva+rva[i];
	sumRav=sumRav+rav[i];
	sumRrvasc=sumRrvasc+rrvasc[i];
	sumRrvaenr=sumRrvaenr+rrvaenr[i];
	sumRrvaenv=sumRrvaenv+rrvaenv[i];
	sumRrvaena=sumRrvaena+rrvaena[i];
	}
	
promRrv=sumRrv/20;                                    //promedio
promRvr=sumRvr/20; 
promRra=sumRra/20; 
promRar=sumRar/20;
promRva=sumRva/20; 
promRav=sumRav/20;
promRrvasc=sumRrvasc/20;
promRrvaenr=sumRrvaenr/20; 
promRrvaenv=sumRrvaenv/20;
promRrvaena=sumRrvaena/20;

ratioPcrrvasc=pcrrvasc/20;
ratioIrrvaenr=pcrrvaenr/20;                                     //Valores de la tabla de resultados, colo significativa (SC)....
ratioIrrvaenv=pcrrvaenv/20;
ratioIrrvaena=pcrrvaena/20;                        
ratioIrv=pcrrv/20;
ratioIvr=pcrvr/20;
ratioIra=pcrra/20;                      
ratioIar=pcrar/20;
ratioIva=pcrva/20;
ratioIav=pcrav/20;                           


if(pcrrvasc==0)
	SSIst="SE";
	else
	if(pcrrvasc==20)
		SSIst="SC";
		else
		SSIst="NS";

if(rrvaenr==0)
	SSItenr="SE";
	else
	if(rrvaenr==20)
		SSItenr="SC";
		else
		SSItenr="NS";

if(rrvaenv==0)
	SSItenv="SE";
	else
	if(rrvaenv==20)
		SSItenv="SC";
		else
		SSItenv="NS";

if(rrvaena==0)
	SSItena="SE";
	else
	if(rrvaena==20)
		SSItena="SC";
		else
		SSItena="NS";

if(pcrrv==0)
	SSIrv="SE";
	else
	if(pcrrv==20)
		SSIrv="SC";
		else
		SSIrv="NS";

if(pcrvr==0)
	SSIvr="SE";
	else
	if(pcrvr==20)
		SSIvr="SC";
		else
		SSIvr="NS";

if(pcrra==0)
	SSIra="SE";
	else
	if(pcrvr==20)
		SSIra="SC";
		else
		SSIra="NS";

if(pcrar==0)
	SSIar="SE";
	else
	if(pcrar==20)
		SSIar="SC";
		else
		SSIar="NS";

if(pcrva==0)
	SSIva="SE";
	else
	if(pcrva==20)
		SSIva="SC";
		else
		SSIva="NS";

if(pcrav==0)
	SSIav="SE";
	else
	if(pcrav==20)
		SSIav="SC";
		else
		SSIav="NS";





showStatus("");








//RESULTADOS

/*
if(interseccion==true)
{
selectWindow("rojoAndVerde");               //cierro imï¿½genes para que no interfieran con futuras corridas de la aplicaciï¿½n
close();
selectWindow("rojoAndAzul");
close();
selectWindow("verdeAndAzul");
close();
}

*/


titulo1 = "Resultados";                                            //genero cuadro que muestra resultados
titulo2 = "["+titulo1+"]";
  f = titulo2;
 if (isOpen(titulo1))
    print(f, "\\Clear");
 else
run("Table...", "name="+titulo1+" width=250 height=600");
print(f, "\\Headings:para\t% intersección\t% aleatorizaciones\t  SE \trelación\tPearson\tManders\taleatorizaciones\t  SE\trelación");
print(f, "Doble colocalización");
print(f, " Rojo en verde"+"\t  "+rv+"\t  "+promRrv+"\t  "+SSIrv+"\t  "+ratioIrv+"\t  "+PrRV+"\t  "+MRv+"\t  "+promMRv+"\t  "+SSMrv+"\t  "+ratioMrv);
print(f, " Verde en rojo"+"\t  "+vr+"\t  "+promRvr+"\t  "+SSIvr+"\t  "+ratioIvr+"\t  "+PrRV+"\t  "+MVr+"\t  "+promMVr+"\t  "+SSMvr+"\t  "+ratioMvr);
print(f, " Rojo en azul"+"\t  "+ra+"\t  "+promRra+"\t  "+SSIra+"\t  "+ratioIra+"\t  "+PrRA+"\t  "+MRa+"\t  "+promMRa+"\t  "+SSMra+"\t  "+ratioMra);
print(f, " Azul en rojo"+"\t  "+ar+"\t  "+promRar+"\t  "+SSIar+"\t  "+ratioIar+"\t  "+PrRA+"\t  "+MAr+"\t  "+promMAr+"\t  "+SSMar+"\t  "+ratioMar);
print(f, " Verde en azul"+"\t  "+va+"\t  "+promRva+"\t  "+SSIva+"\t  "+ratioIva+"\t  "+PrVA+"\t  "+MVa+"\t  "+promMVa+"\t  "+SSMva+"\t  "+ratioMva);
print(f, " Azul en verde"+"\t  "+av+"\t  "+promRav+"\t  "+SSIav+"\t  "+ratioIav+"\t  "+PrVA+"\t  "+MAv+"\t  "+promMAv+"\t  "+SSMav+"\t  "+ratioMav);
print(f, "Triple colocalización");
print(f, " General"+"\t  "+rvasc+"\t  "+promRrvasc+"\t  "+SSIst+"\t  "+ratioPcrrvasc+"\t  ******"+"\t  ******"+ " \t   ******"+ " \t   ******"+ " \t   ******");
print(f, " Segï¿½n rojo"+"\t  "+rvaenr+"\t  "+promRrvaenr+"\t  "+SSItenr+"\t  "+ratioIrrvaenr+"\t  ******"+"\t  "+MRt+"\t  "+promMRt+"\t  "+SSMrt+"\t  "+ratioMrt);
print(f, " Segï¿½n verde"+"\t  "+rvaenv+"\t  "+promRrvaenv+"\t  "+SSItenv+"\t  "+ratioIrrvaenv+"\t  ******"+"\t  "+MVt+"\t  "+promMVt+"\t  "+SSMvt+"\t  "+ratioMvt);
print(f, " Segï¿½n azul"+"\t  "+rvaena+"\t  "+promRrvaena+"\t  "+SSItena+"\t  "+ratioIrrvaena+"\t  ******"+"\t  "+MAt+"\t  "+promMAt+"\t  "+SSMat+"\t  "+ratioMat);
print(f, "");

print(f, "valor P: "+1/20);

print("REFERENCIAS:\n"); 
print("% intersección: porcentage de colocalización según coeficientes de intersección.\n");
print("% aleatorizaciones: promedio de resultados de colocalización obtenidos de las imágenes generadas (o aleatorizaciones) para coeficientes de intersección.\n");
print("SE: significancia estadística. El primero de la tabla (de izquierda a derecha), para coeficientes de intersección, y el segundo para Manders.\n");
print("SC: colocalización significativa; SE: exclusión significativa; NS: resultado no significativo.\n");
print("relación: entre la cantidad de aleatorizaciones que arrojaron resultados de colocalización menores que las imágenes generadas y la cantidad total de aleatorizaciones. \n");
print("Tiende a 1 cuando los resultados de aleatorizaciones se acercan a colocalización significativa y a cero cuando los resultados tienden a exclusión significativa.\n");
print(" El primero de la table (de izquierda a derecha), para coeficientes de intersección y el segundo para Manders. \n");
print("Pearson: coeficiente de Pearson. Solo para colocalización doble.\n");
print("Manders: coeficiente de Manders.\n");
print("aleatorizaciones: promedio de resultados de colocalización obtenidos de las imágenes generadas para coeficientes de Manders.\n");
print("General: coeficiente de intersección según superficie cubierta por los dos canales.\n");
print("Valor P: define el nivel de significación.\n");
print("\n");


setBatchMode(false);

// Resultados grï¿½ficos
          


run("Merge Channels...", "c1=[rojoAndMascara] c2=[verdeAndMascara] c3=[azulAndMascara] create keep");    //Genero imagen de triple colocalizaciï¿½n
rename("Colocalización");
updateDisplay();



selectWindow("rojoAndMascara");
close();
selectWindow("verdeAndMascara");
close();
selectWindow("azulAndMascara");
close();

/*
print(rMRt[0]);
print(rnumMRt[0]);
print(sumRojo);
print(unosRojos);
print(unosVerdes);                                         //sentencias de prueba de cï¿½digo
print(unosAzules);
print(cerosRandRojos);
print(cerosRandVerdes);
print(cerosRandAzules);
print(unosMascara);
print(cerosMascara);
*/


}

//fin TRIPLE


















































if(canals=="Dos")
{

  Dialog.create("SETC");    //genero ventana de inicio
                                                                    
  Dialog.addChoice("Rojo:", figura);         
  Dialog.addChoice("Verde:", figura);          
   Dialog.addChoice("Máscara:", figura);  
  
  
       Dialog.show();
   	rojo=Dialog.getChoice();
   	verde=Dialog.getChoice();
   	mascara=Dialog.getChoice();
   	
   	
	






//SENTENCIAS USADAS EN VARIOS BLOQUES


selectWindow(mascara);
run("Select None");

selectWindow(rojo);
run("8-bit");
selectWindow(verde);
run("8-bit");


w = getWidth;                                  //cargo tamaï¿½o de imagen
h = getHeight;


imageCalculator("AND create", verde, mascara);     //opero imï¿½genes con la mï¿½scara
rename("verdeAndMascara");
imageCalculator("AND create", rojo, mascara);   
rename("rojoAndMascara");

setBatchMode(true);

function contarUnos(ventana)                     //Declaro una funciï¿½n que cuenta unos
{
selectWindow(ventana);       
   a = newArray(w*h);
   i = 0;
   sumador=0;
for (y=0; y<h; y++)
	{
	for (x=0; x<w; x++)
		a[i++] = getPixel(x,y);
	}
for(i=0; i<w*h; i++)
	{
	if(a[i]==255)
		sumador++;
	}
return sumador;
}

function contarCeros(ventana)                     //Declaro una funciï¿½n que cuenta ceros
{
selectWindow(ventana);       
   a = newArray(w*h);
   i = 0;
   sumador=0;
for (y=0; y<h; y++)
	{
	for (x=0; x<w; x++)
		a[i++] = getPixel(x,y);
	}
for(i=0; i<w*h; i++)
	{
	if(a[i]==0)
		sumador++;
	}
return sumador;
}

unosMascara=contarUnos(mascara);                        //cuento unos y ceros en la mascara
cerosMascara=contarCeros(mascara);

if(unosMascara+cerosMascara!=w*h)
	exit("Binarizar la máscara antes de ejecutar la aplicación");

function sumarPixInt(ventana)                     //Declaro una funciï¿½n que suma intensidades de todos los pixeles
{
selectWindow(ventana);       
   a = newArray(w*h);
   i = 0;
   suma=0;
for (y=0; y<h; y++)
	{
	for (x=0; x<w; x++)
		a[i++] = getPixel(x,y);
	}
for(i=0; i<w*h; i++)
	{
	suma=suma+a[i];
	}
return suma;
}








// CALCULO DE COEFICIENTE DE PEARSON Y MANDERS


showStatus("Calculando coeficiente de Pearson y Manders...");

sumRojo=sumarPixInt("rojoAndMascara");                     //sumo intensidades en cada imagen
sumVerde=sumarPixInt("verdeAndMascara");

pr=sumRojo/unosMascara;                                    //calculo promedios de intensidad para cada imagen 
pv=sumVerde/unosMascara;

    nunRV=0;
   denR=0;
   denV=0;

numMRv=0;
numMVr=0;

 
selectWindow("rojoAndMascara");	
  r = newArray(w*h);
  i = 0;
for (y=0; y<h; y++)
	{
	for (x=0; x<w; x++)
		{
		r[i] = getPixel(x,y);
		if(r[i] == 255)
			r[i]=254;
		i++;
		}
	}
sumRojoR=0;
i=0;
for (i=0; i<w*h; i++)
	sumRojoR=sumRojoR+r[i];
	

selectWindow("verdeAndMascara");	
  v = newArray(w*h);
  i = 0;
for (y=0; y<h; y++)
	{
	for (x=0; x<w; x++)
		{
		v[i] = getPixel(x,y);
		if(v[i] == 255)
			v[i]=254;
		i++;
		}
	}
sumVerdeR=0;
i=0;
for (i=0; i<w*h; i++)
	sumVerdeR=sumVerdeR+v[i];



for(i=0; i<w*h; i++)                                     //calculo todas las series                
	{
	showStatus("Calculando coeficiente de Pearson y Manders...");
	denR=denR+(r[i]-pr)*(r[i]-pr);                                                                 //Pearson                                          
	denV=denV+(v[i]-pv)*(v[i]-pv);
	numRV=numRV+(r[i]-pr)*(v[i]-pv);
	
	if(r[i]*v[i] != 0)
		{
		numMRv=numMRv+r[i];
		numMVr=numMVr+v[i];
		}	
	
	}

denRV=sqrt(denR*denV);                             //calculo coeficientes de Pearson

PrRV=numRV/denRV;                                     

MRv=numMRv/sumRojo;
MVr=numMVr/sumVerde;


showStatus("");


 











//  SIGNIFICANCIA ESTADï¿½STICA DE MANDERS



showStatus("Calculando significancia estadística para coeficiente de Manders...");


rMRv=newArray(50);
rMVr=newArray(50);

rnumMRv=newArray(50);  
rnumMVr=newArray(50);  

pMRv=0;
pMVr=0;

nMRv=0;
nMVr=0;


function cantPixInt(ventana)                     //Declaro una funciï¿½n que cuenta pixeles distintos de cero
{
selectWindow(ventana);       
   a = newArray(w*h);
   i = 0;
   suma=0;
for (y=0; y<h; y++)
	{
	for (x=0; x<w; x++)
		a[i++] = getPixel(x,y);
		
	}
for(i=0; i<w*h; i++)
	{
	if(a[i] != 0)
		suma++;
	}
return suma;
}

valoresR=cantPixInt("rojoAndMascara");            //cantidad de pixeles mayores que cero
valoresV=cantPixInt("verdeAndMascara");  


selectWindow("rojoAndMascara");
rb=newArray(w*h);                               //genero un vector que contiene solo los valores distintos de cero para cada canal
s=0;
for(i=0; i<w*h; i++)
	{
	if(r[i] != 0)
		{
		rb[s]=r[i];
		s++;
		}
	}



for(s=0; s<50; s++)                                        //rulo para generar tantas imï¿½genes aleatorias para cada fluorï¿½foro como se cargue en el diï¿½logo de entrada
{
 
//beep();                                                                                    //genero imagenes aleatorias

random("seed", round(random*w*h*10));
	
u=newArray(w*h+10);                                                                //desordeno aleatoriamente el vector rojo
i=0;
for(i=0; i<w*h; i++)
	u[i]=true;

rd=newArray(w*h);
i=0;	
while(i<valoresR)
	{
	e=round(random*valoresR);
        	if(u[e]==true)
		{
		rd[i]=rb[e];
		u[e]=false;
		i++;
		}
	}
	
factor=valoresR/unosMascara;                                                                            //pongo los valores en la mascara

selectWindow(mascara);
run("Duplicate...", "title=RandRojo");
suma=0;
i=0;
while(suma<sumRojoR-255)
	{
	for (y=0; y<h; y++)
		{
		for (x=0; x<w; x++)
			{
			p=random;
			l=getPixel(x, y);
			if(l==255 && p <= factor)
				{
				setPixel(x, y, rd[i]);
				suma=suma+rd[i];
				i++;
				}
			}
		}
	}

for (y=0; y<h; y++)                                      //cambio unos por ceros
	{
	for (x=0; x<w; x++)
		{
		l=getPixel(x, y);
		if(l == 255)
			setPixel(x, y, 0);
		}
	}
	
                                                                //desordeno aleatoriamente el vector verde


                                     
	
selectWindow("RandRojo");        //obtengo el valor de cada pixel para cada imagen y los transformo en vectores unidimensionales	
   rR = newArray(w*h);    
   i = 0;
for (y=0; y<h; y++)
	{
	for (x=0; x<w; x++)
		rR[i++] = getPixel(x,y);
	}


	
	for(i=0; i<w*h; i++)                                     //calculo doble colocalizacion de imagenes generadas                
	{
	if(rR[i]*v[i] != 0)
		{
		rnumMRv[s]=rnumMRv[s]+rR[i];
		rnumMVr[s]=rnumMVr[s]+v[i];
		}	
	}

	
rMRv[s]=rnumMRv[s]/sumRojo;
rMVr[s]=rnumMVr[s]/sumVerde;


	if(rMRv[s]<=MRv)
		pMRv++;
		else
		nMRv++;	
	if(rMVr[s]<=MVr)
		pMVr++;
		else
		nMVr++;


selectWindow("RandRojo");                           //cierro imï¿½genes para que no interfieran en el prï¿½ximo ciclo del lazo	
close();


	
}

ratioMv=pMRv/50;                            //Valores de la tabla de resultados, colo significativa (SC)....
ratioMr=pMVr/50;

if(pMRv==0)
	SSMr="SE";
	else
	if(pMRv==50)
		SSMr="SC";
		else
		SSMr="NS";

if(pMVr==0)
	SSMv="SE";
	else
	if(pMVr==50)
		SSMv="SC";
		else
		SSMv="NS";

sumMRv=0;
sumMVr=0;


for(i=0; i<50; i++)         //sumo
	{	
	sumMRv=sumMRv+rMRv[i];
	sumMVr=sumMVr+rMVr[i];
	}
	

promMRv=sumMRv/50; 
promMVr=sumMVr/50; 




showStatus("");














selectWindow("rojoAndMascara");
run("Make Binary");
selectWindow("verdeAndMascara");                                                             
run("Make Binary");

 














// COLOCALIZACIï¿½N DE INTERSECCIï¿½N        

/*
imageCalculator("OR create", "rojoAndMascara", "verdeAndMascara");          
rename("GOR"); 
run("Mean...", "radius=1");  
//run("Gaussian Blur...", "sigma=1");
run("Threshold...");
setThreshold(1, 255);
run("Convert to Mask");
unosGOR=contarUnos("GOR");
selectWindow("Threshold");
run("Close");
}
*/


showStatus("Calculando porcentage de colocalización de intersección...");

cerosRojos=contarCeros("rojoAndMascara");                     //cuento ceros en cada canal
cerosVerdes=contarCeros("verdeAndMascara");

cerosRandRojos=cerosRojos-cerosMascara;                       // calculo la cantidad de ceros dentro de la mï¿½scara para cada color
cerosRandVerdes=cerosVerdes-cerosMascara;

imageCalculator("AND create", "rojoAndMascara", "verdeAndMascara");     //opero para obtener doble colocalizaciï¿½n
rename("rojoAndVerde");

unosRojos=contarUnos("rojoAndMascara");                     //cuento unos en cada canal
unosVerdes=contarUnos("verdeAndMascara");

unosRV=contarUnos("rojoAndVerde");                       //cuento unos de doble colo

rv=(unosRV/unosRojos)*100;                            //calculo coeficientes de colocalizaciï¿½n
vr=(unosRV/unosVerdes)*100;
supTot=(unosRV/(unosRojos+unosVerdes-unosRV))*100;
















//  SIGNIFICANCIA ESTADï¿½STICA INTERSECCIï¿½N



showStatus("Calculando significancia estadística de colocalización de intersección...");

rrv=newArray(50);                           //Defino arreglos para cada indice de colocalizaciï¿½n
rvr=newArray(50);
rSupTot=newArray(50);   

pcrrv=0;		                                       //Inicializo contadores positivos
pcrvr=0;	
pSupTot=0;

ncrrv=0;		                                       //Inicializo contadores negativos
ncrvr=0;
nSupTot=0;



for(s=0; s<50; s++)                        //rulo para generar tantas imï¿½genes aleatorias para cada fluorï¿½foro como se cargue en el diï¿½logo de entrada
	{
	//beep();

	random("seed", round(random*w*h*10));

if(intOR==true)
{
selectWindow("GOR");                            //genero una imagen aleatoria para el canal rojo
	run("Duplicate...", "title=RandRojo");
	z=0;
            f=0;
   	for (y=0; y<h; y++)
		{
      		for (x=0; x<w; x++)
			{
          			f=random;
			if(f<=(unosGOR-unosRojos)/unosGOR)
			setPixel(x, y, 0);
			}
		}
}
else
{
	selectWindow(mascara);                            //genero una imagen aleatoria para el canal rojo
	run("Duplicate...", "title=RandRojo");
	z=0;
            f=0;
   	for (y=0; y<h; y++)
		{
      		for (x=0; x<w; x++)
			{
          			f=random;
			if(f<=cerosRandRojos/unosMascara)
			setPixel(x, y, 0);
			}
		}
		
}	
	
	
	imageCalculator("AND create", "RandRojo", "verdeAndMascara");     //opero para obtener doble colocalizaciï¿½n
	rename("RandRojoAndRandVerde");
	
	RandunosRV=contarUnos("RandRojoAndRandVerde");    //cueno pixeles de doble colo 
	
	
// la superficie cubierta total aleatoria es la misma que la del ensayo
// igual que el total de unos para cada color son los del ensayo


	rrv[s]=(RandunosRV/unosRojos)*100;                            //calculo coeficientes de colocalizaciï¿½n
	rvr[s]=(RandunosRV/unosVerdes)*100;
	rSupTot[s]=(RandunosRV/(unosRojos+unosVerdes-RandunosRV))*100;

	if(rrv[s]<=rv)                           //Para cada coeficiente de colocalizaciï¿½n cuento cuantas veces fue mayor el generado al azar
		pcrrv++;
		else
		ncrrv++;	
	if(rvr[s]<=vr)
		pcrvr++;
		else
		ncrvr++;
	if(rSupTot[s]<=supTot)
		pSupTot++;
		else
		nSupTot++;


	

selectWindow("RandRojo");                           //cierro imï¿½genes para que no interfieran en el prï¿½ximo ciclo del lazo	
close();
selectWindow("RandRojoAndRandVerde");
close();	

	
}

ratioIr=pcrrv/50;                                  //Valores de la tabla de resultados, colo significativa (SC)....                      
ratioIv=pcrvr/50;
ratioIst=pSupTot/50;

if(pcrrv==0)
	SSIr="SE";
	else
	if(pcrrv==50)
		SSIr="SC";
		else
		SSIr="NS";

if(pcrvr==0)
	SSIv="SE";
	else
	if(pcrvr==50)
		SSIv="SC";
		else
		SSIv="NS";

if(pSupTot==0)
	SSst="SE";
	else
	if(pSupTot==50)
		SSst="SC";
		else
		SSst="NS";


sumRrv=0;                          //inicializo variables de suma para promedios
sumRvr=0;
sumSupTot=0;

for(i=0; i<50; i++)         //sumo
	{	
	sumRrv=sumRrv+rrv[i];
	sumRvr=sumRvr+rvr[i];
	sumSupTot=sumSupTot+rSupTot[i];
	}
	
promRrv=sumRrv/50;                                    //promedio
promRvr=sumRvr/50; 
promSupTot=sumSupTot/50;   



showStatus("");







//RESULTADOS


selectWindow("rojoAndVerde");               //cierro imï¿½genes para que no interfieran con futuras corridas de la aplicaciï¿½n
close();

titulo1 = "Resultados";                                            //genero cuadro que muestra resultados
titulo2 = "["+titulo1+"]";
  f = titulo2;
 if (isOpen(titulo1))
    print(f, "\\Clear");
 else
run("Table...", "name="+titulo1+" width=250 height=600");
print(f, "\\Headings:para\t% intersección\t% aleatorizaciones\t  SE \trelación\tPearson\tManders\taleatorizaciones\t  SE\trelación");
print(f, " Rojo en verde"+"\t  "+rv+"\t  "+promRrv+"\t  "+SSIr+"\t  "+ratioIr+"\t  "+PrRV+"\t  "+MRv+"\t  "+promMRv+"\t  "+SSMr+"\t  "+ratioMr);
print(f, " Verde en rojo"+"\t  "+vr+"\t  "+promRvr+"\t  "+SSIv+"\t  "+ratioIv+"\t  "+PrRV+"\t  "+MVr+"\t  "+promMVr+"\t  "+SSMv+"\t  "+ratioMv);
print(f, " General"+"\t  "+supTot+"\t  "+promSupTot+"\t  "+SSst+"\t  "+ratioIst+"\t    ******"+"\t   ******"+"\t    ******"+"\t   ******"+"\t   ******");
print(f, "");
print(f, "Valor P= "+1/50);

print("REFERENCIAS:\n"); 
print("% intersección: porcentage de colocalización según coeficientes de intersección.\n");
print("% aleatorizaciones: promedio de resultados de colocalización obtenidos de las imágenes generadas (o aleatorizaciones) para coeficientes de intersección.\n");
print("SE: significancia estadística. El primero de la tabla (de izquierda a derecha), para coeficientes de intersección, y el segundo para Manders.\n");
print("SC: colocalización significativa; SE: exclusión significativa; NS: resultado no significativo.\n");
print("relación: entre la cantidad de aleatorizaciones que arrojaron resultados de colocalización menores que las imágenes generadas y la cantidad total de aleatorizaciones. \n");
print("Tiende a 1 cuando los resultados de aleatorizaciones se acercan a colocalización significativa y a cero cuando los resultados tienden a exclusión significativa.\n");
print(" El primero de la table (de izquierda a derecha), para coeficientes de intersección y el segundo para Manders. \n");
print("Pearson: coeficiente de Pearson. Solo para colocalización doble.\n");
print("Manders: coeficiente de Manders.\n");
print("aleatorizaciones: promedio de resultados de colocalización obtenidos de las imágenes generadas para coeficientes de Manders.\n");
print("General: coeficiente de intersección según superficie cubierta por los dos canales.\n");
print("Valor P: define el nivel de significación.\n");
print("\n");


setBatchMode(false);



selectWindow("rojoAndMascara");
close();
selectWindow("verdeAndMascara");
close();


}

//fin DOBLE

}
//FIN
